'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 1
' Initial_Processdelay           = 1000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.3.0
' Optimize                       = No
' Stacksize                      = 1000
' Info_Last_Save                 = FERMIUM  Fermium\coldatoms
'<Header End>
#include ADwpad.inc
#include Adwpda.inc
#include Adwpdio.inc
#include adwinpro.inc

'Dec 08/2022
' Added 3rd digital out

'Sept 24/2020
' DDS channel asignment understood. Digital channel numbers
' in sequencer GUI are ADwin code channel number +1
' Commented out DDS2 code and channel assignment, and ioreset for DDS1
' added some clarifying comments

'Sept 04/2020
' Added 8 analog channels for new analog card, assumed new card will be module 6
' Confused by DDS channel numbering scheme, don't understand DDS channel assignment
' Perhaps digital module 1 is the transistor output card
  
'Description:
'expecting 3 arrays.
dim DATA_1[5000000] as long  'A list which specifies how many channels will be updated per event
dim DATA_2[5000000] as long  'A list of channels to be updated
dim data_3[5000000] as float 'A list of values for the channels
'DATA_2 and data_3 have a 1:1 correspondence.  
'Stepping through DATA_2 and data_3 is controlled by DATA_1
'Computer send an integer to Par_1.  This tells us how many
'events to write. 

'data_4 is the enactment of the reset to zero function in the sequencer code
dim data_4[100] as long     ' a list of which channels are reset to zero on completion


'Channels 1-48 refer to Analog output lines
'Channel 101,102 refers to Digital output lines (32 bit words each)
' (at one point, 101 and 102 were each 16 bit, perhaps when using a T9 processor)
'channel 51-53 refers to digital output lines controlling the DDS
'DDS control lines are digital output lines

'DDS variables
'Data line, read clock, io update , reset
' 0-3 data
' 4 I/O reset
' 5 update clock
' 6 master Reset
' 7 (maybe) RF switch  
dim dataline,clock, ioupdate,ioreset,masterreset as long
' dim dataline9858,clock9858,ioupdate9858,ioreset9858,masterreset9858 as long

dim i,j,k,lightcount,litup,eventcount,delaymultinuse as long
dim value as float
dim counts,maxcount,updates as long
dim ch as long
dim val,val_lower,val_upper,val_lower2,val_upper2 as long
dim tempval as long 
dim digitallow as long
dim delay,delayinuse as long
dim numbertoskip as long
dim leddelay as float
dim digitalactive,digital2active as long

'converts voltage to bit number
'value is from -10 to 10
'd1vides by 20 to make 0 to 1
'multiplies by 2^16 -1
Function V(value) as float
  V=(value+10)/20*65535
ENDFUNCTION


INIT:
  delay=PAR_2 'set by sequencer: 40000=>1ms
  GlobalDelay=delay
  
  'DDS digital line setup
  dataline=31         ' data line
  clock=30        ' data clock
  ioupdate=29      ' update line.  transfers data from buffer into registers
  'ioreset=28      ' resets input buffers
  masterreset=27

  'DDS2 digital lines (base 0)
  '  dataline9858=21
  '  clock9858=22
  '  ioupdate9858=19
  '  ioreset9858=23
  '  masterreset9858=18

  'initialize modules, 65535 -> all 16 channels set to 1 (output)
  DigProg1(1,65535)
  DigProg2(1,65535)
  DigProg1(2,65535)
  DigProg2(2,65535)
  DigProg1(3,65535)
  DigProg2(3,65535)
  
  'Configure cards for synchronous output
  ' digital: 1 is transistor output, not used, 2 and 3 are digital outs
  SYNCENABLE(1,dio,1)
  SYNCENABLE(2,dio,1)
  SYNCENABLE(3,dio,1)
  SYNCENABLE(4,dio,1) 'for third digital out card

  ' analog: 6 analog cards
  SYNCENABLE(1,da,1)
  SYNCENABLE(2,da,1)
  SYNCENABLE(3,da,1)
  SYNCENABLE(4,da,1)
  SYNCENABLE(5,da,1)
  SYNCENABLE(6,da,1)

  numbertoskip=0
  counts=1
  maxcount=Par_1 'no. entries in DATA_1
  updates=1
  lightcount=0
  eventcount=0
  leddelay=8000000/GLOBALDELAY
  
  ' Make sure the DDS lines are low. 0 resets channel
  DIGOUT_F(2,clock,0)
  DIGOUT_F(2,dataline,0)
  'DIGOUT_F(2,ioreset,0)
  DIGOUT_F(2,ioupdate,0)
  DIGOUT_F(2,masterreset,0)


EVENT:
  SYNCALL()    'Force synchronized output now.  We are sending out the data programmed in the last cycle.
  ' This way all the outputs are updated at the beginning of an event, which is well timed.
  ' Doing Syncall() at the end of an event causes the channel outputs to move around in time, depending on how many channels
  ' are being programmed.

  eventcount=eventcount+delaymultinuse
  if(eventcount>leddelay) then
    eventcount=0      
    if(litup=14) then 
      litup=0
    endif
    litup=litup+1
    Light_LED(litup)    
  endif

  delayinuse=delay   ' reset the GlobalDelay
  if(Data_1[counts]<0) then    ' if we see a negative number, interpret it as a multiplicative factor on the delay
    delayinuse=delay*(-1*Data_1[counts])
    delaymultinuse=-1*Data_1[counts]
  endif
  GLOBALDELAY=delayinuse


  ' reset the variables controlling digital output.
  digitalactive=0
  digital2active=0
  val_lower=0
  val_upper=0
  val_lower2=0
  val_upper2=0
  counts=counts+1  'Number of events so far


  IF((99>DATA_1[counts]) and (DATA_1[counts]>=1)) then  'A:Check each element of DATA_1 for an update
    For i=1 to Data_1[counts] 'B: Loop over number of updates at this time
      updates=updates+1
      ch=Data_2[updates]

      '*****************Analog outs**********************   
      ' currently 6 analog cards
      if((ch>=1) and (ch<=48)) then
        AnalogWrite(ch,Data_3[updates])
      endif
    
      '*****************DDS outs*************************
      if(ch=51) then  'AA: is ch=51, then act on the code to write to the DDS1
        DDS1Write(Data_3[updates])
      endif      
    
      '      if(ch=52) then  'BB: is ch=52, then write 2 bits to the DDS2
      '        DDS2Write(Data_3[updates])
      '      ENDIF  'end BB

      '***********************Digital outs***************
      if(ch=101) then
        val_lower=Data_3[updates]
        DIG_WRITELATCH32(2,val_lower) 'Writes Digital Channels 1-32
      endif
  
      if(ch=102) then
        val_upper=Data_3[updates]
        DIG_WRITELATCH32(3,val_upper) 'Writes Digital Channels 101-132
      endif
      
      if(ch=103) then 'for 3rd digital card
        val_upper=Data_3[updates]
        DIG_WRITELATCH32(4,val_upper) 'Writes Digital Channels 133-164
      endif
            
    NEXT i            'B for loop  
  ENDIF        'A:
  If(counts>=maxcount+1) then end


FINISH:
  'Clear all channels
  Par_3=counts
  Par_4=maxcount

  'if Data_4[j]=0, i.e. channel should be set to zero, then set to zero
  For i= 1 to 8
    if(Data_4[i]=1) then
      WRITEDAC(1,i,V(0))   
    ENDIF
    if(Data_4[i+8]=1) then
      WRITEDAC(2,i,V(0))   
    ENDIF
    if(Data_4[i+16]=1) then
      WRITEDAC(3,i,V(0))   
    ENDIF
    if(Data_4[i+24]=1) then
      WRITEDAC(4,i,V(0))   
    ENDIF
    if(Data_4[i+32]=1) then
      WRITEDAC(5,i,V(0))   
    ENDIF
    if(Data_4[i+40]=1) then
      WRITEDAC(6,i,V(0))   
    ENDIF
  Next i

  DIG_WRITELATCH32(2,PAR_5) 
  DIG_WRITELATCH32(3,PAR_6)
  DIG_WRITELATCH32(4,PAR_7) 'for 3rd digital card
  
  SYNCALL()

  '***************************************************
SUB AnalogWrite(achannel, avalue) 
  ' if statement for each module i.e. analog card
  if((achannel>=1)and(achannel<=8)) then
    writedac(1,achannel,V(avalue))
  endif
      
  if((achannel>=9)and(achannel<=16)) then
    writedac(2,achannel-8,V(avalue))
  endif
      
  if((achannel>=17)and(achannel<=24)) then
    writedac(3,achannel-16,V(avalue))
  endif
    
  if((achannel>=25)and(achannel<=32)) then
    writedac(4,achannel-24,V(avalue))
  endif

  if((achannel>=33)and(achannel<=40)) then
    writedac(5,achannel-32,V(avalue))
  endif
  
  if((achannel>=41)and(achannel<=48)) then
    writedac(6,achannel-40,V(avalue))
  endif

ENDSUB
'***************************************************
SUB DDS1Write(digvalue)
  dim tempval as long
  dim dataline,clock,ioupdate,ioreset,masterreset as long
  dataline=31         ' data line
  clock=30        ' data clock
  ioupdate=29      ' update line.  transfers data from buffer into registers
  'ioreset=28      ' resets input buffers - 2020-09-24 commented out, not used
  masterreset=27
  if(digvalue<=3) then  ' write 2 bits to the data line of the DDS
    tempval = digvalue 'have to convert to long first
    ' on Mar 25, we added opto-couplers to the DDS interfacing
    ' this adds a 500ns (roughly) delay to each update
    ' 3 updates takes 500ns, so each one opto-coupler delay is 
    '160 ns different from another, timing will be ruined.
    ' so, double each line so pulses are 1us instead
    DIGOUT_F(2,dataline,SHIFT_RIGHT((tempval and 2),1))
    DIGOUT_F(2,clock,1)
    DIGOUT_F(2,clock,0)
    DIGOUT_F(2,dataline,(tempval and 1))
    DIGOUT_F(2,clock,1)
    DIGOUT_F(2,clock,0)
  ELSE 
    IF(digvalue=4) then 'write to the i/o reset pin to reset the buffer.  
      'DIGOUT_F(2,ioreset,1)  ' Currently disabled
      'DIGOUT_F(2,ioreset,0)
    Else 
      IF(digvalue=5) then
        DIGOUT_F(2,ioupdate,1)
        DIGOUT_F(2,ioupdate,0)
      Else 
        IF(digvalue=6) then
          DIGOUT_F(2,masterreset,1)  ' Leave this doubled as the reset pulse needs to be > 800ns 
          DIGOUT_F(2,masterreset,1)
          DIGOUT_F(2,masterreset,0)              
          DIGOUT_F(2,masterreset,0)                  
        ENDIF
      endif
    endif
  endif
ENDSUB
'***************************************************
' Commented out 2020-09-24, havne't used DDS2 for a long time, want
' to leave digital channels open for use
' -------------------------------------------
'SUB DDS2WRITE(dvalue)
'  dim tempval as long
'  dim dataline9858,clock9858,ioupdate9858,ioreset9858,masterreset9858 as long
'  'DDS2 digital lines (base 0)
'  dataline9858=21
'  clock9858=22
'  ioupdate9858=19
'  'ioreset9858=23
'  masterreset9858=18
'  if(dvalue<=3) then  ' write 2 bits to the data line of the DDS
'    tempval = dvalue 'have to convert to long first
'    DIGOUT_F(2,dataline9858,SHIFT_RIGHT((tempval and 2),1))
'    DIGOUT_F(2,clock9858,1)
'    DIGOUT_F(2,clock9858,0)
'    DIGOUT_F(2,dataline9858,(tempval and 1))
'    DIGOUT_F(2,clock9858,1)
'    DIGOUT_F(2,clock9858,0)
'  ELSE 
'    IF(dvalue=4) then 'write to the i/o update pin to transfer to registers
'      'DIGOUT_F(2,ioreset9858,1)
'      'DIGOUT_F(2,ioreset9858,0)
'    Else 
'      IF(dvalue=5) then
'        DIGOUT_F(2,ioupdate9858,1)
'        DIGOUT_F(2,ioupdate9858,0)
'      Else 
'        IF(dvalue=6) then
'          DIGOUT_F(2,masterreset9858,1)
'          DIGOUT_F(2,masterreset9858,0)                  
'        ENDIF
'      endif
'    endif
'  endif
'ENDSUB

'Flashing LEDs -> running cycle/pretty colours
SUB Light_LED(lit) as  
  SELECTCASE lit
    CASE 1
      SETLED(2,da,0)
      SETLED(1,dio,1)    
    CASE 2    
      SETLED(1,dio,0)
      SETLED(2,dio,1)
    CASE 3
      SETLED(2,dio,0)
      SETLED(3,ext,1)
    CASE 4
      SETLED(3,ext,0)
      SETLED(4,ad,1)
    CASE 5
      SETLED(4,ad,0)
      SETLED(1,da,1)
    CASE 6
      SETLED(1,da,0)
      SETLED(2,da,1)
    CASE 8
      SETLED(2,da,0)
      SETLED(1,da,1)    
    CASE 9
      SETLED(1,da,0)
      SetLED(4,ad,1)
    CASE 10
      SETLED(4,ad,0)
      SETLED(3,ext,1)
    CASE 11
      SETLED(3,ext,0)
      SETLED(2,dio,1)
    CASE 12
      SETLED(2,dio,0)
      SETLED(1,dio,1)
    CASE 13
      SETLED(1,dio,0)
      SETLED(3,da,1)
    CASE 14
      SETLED(3,da,0)
      SETLED(4,da,1)
    CASE 15
      SETLED(4,da,0)
      SETLED(5,da,1)
    CASE 16
      SETLED(5,da,0)
      SETLED(3,dio,1)
    CASE 17
      SETLED(3,dio,0)
      'SETLET(6,da,1)
      'CASE 18
      'SETLED(6,da,0)
  ENDSELECT
ENDSUB
